PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1000,800]
  expName = game
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading forces...
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    CodeComponent code_trial
      Code Type = Py
      Before Experiment:
        Base71Lookup = "0123456789abcdefghijklmnopqrstuvwxyzABCDEFGHIJKLMNOPQRSTUVWXYZ!$%&'()*+,-./:;<=>?@[\\]^_`{|}~"
      Begin Experiment:
        from psychopy import core
        import time
        import serial

        ser = serial.Serial("COM4",230400, timeout= 1)
      Begin Routine:
        ser.flush()

        strMsg = ""
        intCounter = 0
        strSerialData = ""

        output = ""
        outputlength = 0

        B0HighByte = 0
        B0LowByte = 0
        B0ForceInGrams = 0
        B0ForceInNewtons = 0

        B1HighByte = 0
        B1LowByte = 0
        B1ForceInGrams = 0
        B1ForceInNewtons = 0

        B2HighByte = 0
        B2LowByte = 0
        B2ForceInGrams = 0
        B2ForceInNewtons = 0

        B3HighByte = 0
        B3LowByte = 0
        B3ForceInGrams = 0
        B3ForceInNewtons = 0

        B4HighByte = 0
        B4LowByte = 0
        B4ForceInGrams = 0
        B4ForceInNewtons = 0
      Each Frame:
        if intCounter == 0:
            strMsg = ""
            strMsg += "BUT0 BUT1 BUT2 BUT3 BUT4 TTL\n"
            strMsg += "Base 71: 00 00 00 00 00 00\n"
            strMsg += "G: 0000 0000 0000 0000 0000 g\n"
            strMsg += "N: 0.0000 0.0000 0.0000 0.0000 0.0000 N\n"
            strMsg += "Sample: 0000\n"
            strMsg += "Press 'q' to quit.\n"

            feedback_text.text = strMsg
            win.flip()

        while intCounter < 1000:
            keys = event.getKeys()
            if keys:
                if keys[0] == 'q':  # Quit key (only works during samples)
                    ser.flush()
                    ser.write("X".encode())
                    ser.flush()
                    ser.close()
                    core.quit()

            intCounter = intCounter + 1
            strSerialData = ser.readline()

            strMsg = ""
            strMsg += "BUT0 BUT1 BUT2 BUT3 BUT4 TTL\n"

            output = strSerialData.decode()
            outputlength = len(output)

            if outputlength == 12:
                strMsg += "Base 71: " + output[0]
                strMsg += "" + output[1]
                strMsg += "" + output[2]
                strMsg += "" + output[3]
                strMsg += "" + output[4]
                strMsg += "" + output[5]
                strMsg += "" + output[6]
                strMsg += "" + output[7]
                strMsg += "" + output[8]
                strMsg += "" + output[9]
                strMsg += "" + output[10] + "\n\n"

                for i in range(71):
                    if Base71Lookup[i] == output[0]:
                        B0HighByte = i
                    if Base71Lookup[i] == output[2]:
                        B1HighByte = i
                    if Base71Lookup[i] == output[4]:
                        B2HighByte = i
                    if Base71Lookup[i] == output[6]:
                        B3HighByte = i
                    if Base71Lookup[i] == output[8]:
                        B4HighByte = i

                for i in range(71):
                    if Base71Lookup[i] == output[1]:
                        B0LowByte = i
                    if Base71Lookup[i] == output[3]:
                        B1LowByte = i
                    if Base71Lookup[i] == output[5]:
                        B2LowByte = i
                    if Base71Lookup[i] == output[7]:
                        B3LowByte = i
                    if Base71Lookup[i] == output[9]:
                        B4LowByte = i

                B4ForceInGrams = 0
                B4ForceInNewtons = 0
                B0ForceInGrams = ((B0HighByte * 71) + B0LowByte)
                B0ForceInNewtons = B0ForceInGrams * 0.0098
                B1ForceInGrams = ((B1HighByte * 71) + B1LowByte)
                B1ForceInNewtons = B1ForceInGrams * 0.0098
                B2ForceInGrams = ((B2HighByte * 71) + B2LowByte)
                B2ForceInNewtons = B2ForceInGrams * 0.0098
                B3ForceInGrams = ((B3HighByte * 71) + B3LowByte)
                B3ForceInNewtons = B3ForceInGrams * 0.0098
                B4ForceInGrams = ((B4HighByte * 71) + B4LowByte)
                B4ForceInNewtons = B4ForceInGrams * 0.0098

                TTL = output[10]

                strMsg += "G: {:04d} ".format(B0ForceInGrams)
                strMsg += "{:04d} ".format(B1ForceInGrams)
                strMsg += "{:04d} ".format(B2ForceInGrams)
                strMsg += "{:04d} ".format(B3ForceInGrams)
                strMsg += "{:04d} ".format(B4ForceInGrams)
                strMsg += TTL + "\n\n"

                strMsg += "N: {:0.4f} ".format(B0ForceInNewtons)
                strMsg += "{:0.4f} ".format(B1ForceInNewtons)
                strMsg += "{:0.4f} ".format(B2ForceInNewtons)
                strMsg += "{:0.4f} ".format(B3ForceInNewtons)
                strMsg += "{:0.4f} ".format(B4ForceInNewtons)
                strMsg += TTL + "\n\n"

                strMsg += "Sample: {:04d}\n\n".format(intCounter)
                strMsg += "Press 'q' to quit."

                feedback_text.text = strMsg

                ser.reset_input_buffer()  # This clears the serial buffer so it doesn't overfill. This means you will miss samples!
                win.flip()
      End Experiment:
        ser.flush()
        ser.write("X".encode())
        ser.flush()
        ser.close()
  Routine MainGame
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    ImageComponent dino_image
      image = Assets/dino.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent floor1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-.5,-.5)
      shape = rectangle
      size = (.5,0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent floor2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0,-.5)
      shape = rectangle
      size = (.5,0.3)
      startVal [time (s)] = 0.0
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    ImageComponent meatbone_image
      image = Assets/meat_bone.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent score_text
      letterHeight = 0.08
      pos = (0.55, 0.45)
      startVal [time (s)] = 0.0
      text = Score: 0
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    TextComponent timer_text
      letterHeight = 0.08
      pos = (-0.55,0.45)
      startVal [time (s)] = 0.0
      text = 00 : 00
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    CodeComponent DinoMovement
      Code Type = Py
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      Before Experiment:
        Base71Lookup = "0123456789abcdefghijklmnopqrstuvwxyzABCDEFGHIJKLMNOPQRSTUVWXYZ!$%&'()*+,-./:;<=>?@[\\]^_`{|}~"
      Begin Experiment:
        from psychopy.hardware import keyboard
        from psychopy.visual import Rect
        import time

        import serial

        # Initialize the serial connection for PSURP
        #ser = serial.Serial("COM4", 230400, timeout=0.1)  # Replace "COM4" with your port
        #ser.flush()
        #ser.write("X".encode())  # Initialize PSURP
        #ser.write("RUNE\n".encode())  # Enter streaming mode


        B0ForceInNewtons = 0
        B1ForceInNewtons = 0
        B2ForceInNewtons = 0
        B3ForceInNewtons = 0
        B4ForceInNewtons = 0

        # Thresholds for movement
        move_threshold = 2  # Adjust based on PSURP sensitivity
        jump_threshold = 3.0  # Adjust based on PSURP sensitivity

        # Initialize the Keyboard
        kb = keyboard.Keyboard()


        MIN_FORCE = 0.2  # Minimum force to start movement
        FORCE_MULTIPLIER = 0.001  # Adjust this to control how much force affects movement

        # Dino movement variables
        dino_pos = [-0.5, -0.3]  # Starting position [x, y]
        dino_speed = 0  # Initial vertical speed
        gravity = -0.00006  # Downward acceleration 0.00006
        jump_speed = 0.005  # Jumping speed
        move_speed = 0.01  # Horizontal movement speed
        ground_offset = 0.03  # Offset to avoid sinking into the ground visually
        min_x = -0.6  # Left boundary
        max_x = 5.3
        respawn_position = [-0.5, -0.3]  # Starting position for Dino

        # Get the floor vertices from the Floor Controller
        floor1_vertices = floor1.vertices  # Assuming 'floor' is a Polygon or Rect stimulus

        # Calculate the floor's top and fall threshold
        floor_top = max(v[1] for v in floor1_vertices)  # Highest point of the floor
        fall_threshold = min(v[1] for v in floor1_vertices) - 1  # Slightly below the lowest floor point


        # Function to check if Dino is on the floor
        def is_on_floor(dino_pos):
            """Check if Dino's bottom is within the bounds of floor1 or floor2."""
            dino_bottom = dino_pos[1] - (dino_image.size[1] / 2)  # Dino's bottom Y-position

            # Floor1 bounds
            x_min1 = min(v[0] for v in floor1_vertices)
            x_max1 = max(v[0] for v in floor1_vertices)

            # Floor2 bounds
            x_min2 = min(v[0] for v in floor2_vertices)
            x_max2 = max(v[0] for v in floor2_vertices)

            # Check floor1 or floor2
            on_floor1 = x_min1 <= dino_pos[0] <= x_max1 and dino_bottom <= floor1_top
            on_floor2 = x_min2 <= dino_pos[0] <= x_max2 and dino_bottom <= floor2_top

            return on_floor1 or on_floor2



        # Animation-related variables
        frame_paths = [
            "Assets/dino_frames/f1.png", "Assets/dino_frames/f2.png",
            "Assets/dino_frames/f3.png", "Assets/dino_frames/f4.png",
            "Assets/dino_frames/f5.png", "Assets/dino_frames/f6.png",
            "Assets/dino_frames/f7.png", "Assets/dino_frames/f8.png",
            "Assets/dino_frames/f9.png", "Assets/dino_frames/f10.png",
            "Assets/dino_frames/f11.png", "Assets/dino_frames/f12.png"
        ]



        frame_index = 0  # Start with the first frame
        frame_index_update_counter = 0  # Counter to manage animation speed
        total_frames = len(frame_paths)  # Total number of frames in the animation

        # Initialize the Dino's first frame
        dino_image.image = frame_paths[frame_index]
      Begin Routine:
        dino_pos = [-0.5, -0.3]  # Reset Dino's position
        dino_speed = 0  # Reset vertical speed
      Each Frame:
        # Initialize key state flags
        left_pressed = False
        right_pressed = False
        up_pressed = False

        # Handle input based on the selected control method
        if selected_control == "Keyboard":
            # Process keyboard input
            keys_pressed = kb.getKeys(['left', 'right', 'up'], waitRelease=False, clear=False)
            for key in keys_pressed:
                if key.name == 'left':
                    left_pressed = True
                if key.name == 'right':
                    right_pressed = True
                if key.name == 'up':
                    up_pressed = True


        if selected_control == "PSURP":
            # Read serial data
            ser.flushInput()
            strSerialData = ser.readline()
            if len(strSerialData.decode()) == 12:
                output = strSerialData.decode()

                # Calculate forces
                B0HighByte = Base71Lookup.index(output[0])
                B0LowByte = Base71Lookup.index(output[1])
                B1HighByte = Base71Lookup.index(output[2])
                B1LowByte = Base71Lookup.index(output[3])
                B2HighByte = Base71Lookup.index(output[4])
                B2LowByte = Base71Lookup.index(output[5])

                # Calculate forces in Newtons
                B0ForceInNewtons = ((B0HighByte * 71) + B0LowByte) * 0.0098
                B1ForceInNewtons = ((B1HighByte * 71) + B1LowByte) * 0.0098
                B2ForceInNewtons = ((B2HighByte * 71) + B2LowByte) * 0.0098

                # Apply forces directly to movement
                if B0ForceInNewtons > MIN_FORCE:
                    dino_speed = B0ForceInNewtons * FORCE_MULTIPLIER  # Jump height based on force

                if B1ForceInNewtons > MIN_FORCE and dino_pos[0] > min_x:
                    move_amount = B1ForceInNewtons * FORCE_MULTIPLIER
                    dino_pos[0] -= move_amount  # Left movement based on force
                    dino_image.size = [-1 * abs(dino_image.size[0]), dino_image.size[1]]

                if B2ForceInNewtons > MIN_FORCE and dino_pos[0] < max_x:
                    move_amount = B2ForceInNewtons * FORCE_MULTIPLIER
                    dino_pos[0] += move_amount  # Right movement based on force
                    dino_image.size = [abs(dino_image.size[0]), dino_image.size[1]]




        # Apply gravity to Dino's vertical speed
        dino_speed += gravity

        # Check if Dino is on the floor
        if is_on_floor(dino_pos) and dino_speed <= 0:  # Falling or stationary
            dino_pos[1] = floor1_top + (dino_image.size[1] / 2) - ground_offset  # Align Dino with the floor
            dino_speed = 0  # Reset vertical speed

        # Respawn if Dino falls below the floor threshold
        if dino_pos[1] < fall_threshold:
            continueRoutine = False  # Stop the MainGame routine

        # Jumping logic: Allow jump whenever the 'up' key is pressed
        if up_pressed:  # Check if the up key is pressed
            dino_speed = jump_speed  # Apply upward movement

        # Update Dino's vertical position
        dino_pos[1] += dino_speed

        # Continuous horizontal movement
        if left_pressed and dino_pos[0] > min_x:
            dino_pos[0] -= move_speed  # Move Dino to the left
            dino_image.size = [-1 * abs(dino_image.size[0]), dino_image.size[1]]

        if right_pressed and dino_pos[0] < max_x:
            dino_pos[0] += move_speed  # Move Dino to the right
            dino_image.size = [abs(dino_image.size[0]), dino_image.size[1]]  # Reset Dino to face right

        # Update Dino's position
        dino_image.pos = [0, dino_pos[1]]  # Center Dino horizontally, only update vertical


        keys_pressed = kb.getKeys(['o'], waitRelease=False, clear=False)
        if 'o' in [key.name for key in keys_pressed]:
            print(f"Dino Position: X = {dino_pos[0]:.3f}, Y = {dino_pos[1]:.3f}")




        # Update the Dino's animation
        if (frame_index_update_counter % 4) == 0:  # Adjust 4 to control animation speed
            dino_image.image = frame_paths[frame_index]  # Update the current frame

            # Advance to the next frame
            frame_index += 1
            if frame_index >= total_frames:
                frame_index = 0  # Loop back to the first frame



        # Increment the animation frame counter
        frame_index_update_counter += 1
      End Experiment:
        #ser.flush()
        #ser.write("X".encode())  # Exit command mode
        #ser.close()
    CodeComponent worldController
      Code Type = Py
      Begin Experiment:
        from psychopy.visual import Rect, ImageStim, ShapeStim
        import math



        # Function to calculate vertices of a Rect stimulus
        def calculate_rect_vertices(rect):
            """Calculate the vertices of a Rect stimulus."""
            half_width = rect.width / 2
            half_height = rect.height / 2
            center_x, center_y = rect.pos
            vertices = [
                [center_x - half_width, center_y - half_height],  # Bottom-left
                [center_x + half_width, center_y - half_height],  # Bottom-right
                [center_x + half_width, center_y + half_height],  # Top-right
                [center_x - half_width, center_y + half_height],  # Top-left
            ]
            return vertices

        # Camera variables
        camera_offset_x = 0  # Tracks the camera offset to follow Dino

        # Background properties
        background_width = 2.0  # Width of a single background image
        background_height = 1.0
        background_image = 'Assets/7.png'  # Path to your custom background image

        # Create two background images for seamless scrolling
        background1 = ImageStim(win, image=background_image, size=[background_width, background_height], pos=[0, 0])
        background2 = ImageStim(win, image=background_image, size=[background_width, background_height], pos=[background_width, 0])

        # Floor1 properties
        floor1_height = 0.3
        floor1_width = 0.5
        floor1_pos = [-0.5, -0.5]

        floor1 = Rect(
            win=win,
            width=floor1_width,
            height=floor1_height,
            pos=floor1_pos,
            fillColor="black",
            lineColor=None
        )
        floor1_vertices = calculate_rect_vertices(floor1)

        # Floor2 properties - Place it further into the map
        floor2_x_static = 5.0  # Fixed X position where floor2 appears
        floor2_height = 0.3
        floor2_width = 0.5

        floor2 = Rect(
            win=win,
            width=floor2_width,
            height=floor2_height,
            pos=[floor2_x_static, -0.5],
            fillColor="black",
            lineColor=None
        )
        floor2_vertices = calculate_rect_vertices(floor2)


        # Floor thresholds
        floor1_top = max(v[1] for v in floor1_vertices)
        floor2_top = max(v[1] for v in floor2_vertices)



        #meat bone

        meatbone_size = [0.15, 0.09]  # Example size (width, height)
        meatbone_image.size = meatbone_size
        offset = 0.01  # Adjust to align the meatbone properly with floor2


        #arc stuff

        # Arc properties
        arc1_center = [0.3, 0.0]
        arc1_radius = 0.2
        arc1_start_angle = 0
        arc1_end_angle = 180

        # Arc 2 Properties
        arc2_center = [1, -0.1]  # Different position
        arc2_radius = 0.3         # Different radius
        arc2_start_angle = 0
        arc2_end_angle = 180


        # Arc 3 Properties
        arc3_center = [1.8, 0]  # Position Arc 3 further into the map
        arc3_radius = 0.25         # Choose a radius for Arc 3
        arc3_start_angle = 0
        arc3_end_angle = 180


        # Generate vertices for Arc 1
        arc1_vertices = []
        for i in range(51):  # 50 segments for smoothness
            angle = math.radians(arc1_start_angle + i * (arc1_end_angle - arc1_start_angle) / 50)
            x = arc1_center[0] + arc1_radius * math.cos(angle)
            y = arc1_center[1] + arc1_radius * math.sin(angle)
            arc1_vertices.append((x, y))

        # Generate vertices for Arc 2
        arc2_vertices = []
        for i in range(51):  # 50 segments for smoothness
            angle = math.radians(arc2_start_angle + i * (arc2_end_angle - arc2_start_angle) / 50)
            x = arc2_center[0] + arc2_radius * math.cos(angle)
            y = arc2_center[1] + arc2_radius * math.sin(angle)
            arc2_vertices.append((x, y))



        # Generate vertices for Arc 3
        arc3_vertices = []
        for i in range(51):  # 50 segments for smoothness
            angle = math.radians(arc3_start_angle + i * (arc3_end_angle - arc3_start_angle) / 50)
            x = arc3_center[0] + arc3_radius * math.cos(angle)
            y = arc3_center[1] + arc3_radius * math.sin(angle)
            arc3_vertices.append((x, y))



        # Create the arc ShapeStim
        arc1 = ShapeStim(
            win=win,
            vertices=arc1_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',
            fillColor=None
        )

        # Create Arc 2 ShapeStim
        arc2 = ShapeStim(
            win=win,
            vertices=arc2_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',  # Different color for clarity
            fillColor=None
        )


        # Create Arc 3 ShapeStim
        arc3 = ShapeStim(
            win=win,
            vertices=arc3_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',  # Set color as desired
            fillColor=None
        )
      Each Frame:
        # Get Dino's position from your Dino movement code
        # Assume dino_pos[0] tracks Dino's X position (horizontal movement)

        # Update the camera offset based on Dino's X position
        camera_offset_x = dino_pos[0]  # The camera offset follows Dino's position

        # Move backgrounds relative to Dino's position (seamless wrap-around)
        background1.pos = [-(camera_offset_x % background_width), 0]
        background2.pos = [background1.pos[0] + background_width, 0]

        # Update floor positions relative to Dino's position
        floor1.pos = [floor1_pos[0] - camera_offset_x, floor1.pos[1]]  # Floor1 moves with Dino
        floor2.pos = [floor2_x_static - camera_offset_x, floor2.pos[1]]  # Floor2 moves with Dino


        # Update meatbone position to match floor2's top
        meatbone_x = floor2.pos[0]  # Update X position based on floor2
        meatbone_y = floor2_top + (meatbone_size[1] / 2) - offset  # Keep the meatbone on top of floor2

        meatbone_pos = [meatbone_x, meatbone_y]
        meatbone_image.pos = meatbone_pos


        # Update the arc position relative to the camera offset
        # Update Arc 1 Position
        arc1.pos = [arc1_center[0] - camera_offset_x, arc1_center[1]]

        # Update Arc 2 Position
        arc2.pos = [arc2_center[0] - camera_offset_x, arc2_center[1]]

        arc3.pos = [arc3_center[0] - camera_offset_x, arc3_center[1]]

        # Draw the backgrounds and floors
        background1.draw()
        background2.draw()
        floor1.draw()
        floor2.draw()
        arc1.draw()
        arc2.draw()
        arc3.draw()
    CodeComponent GoalController
      Code Type = Py
      Begin Experiment:
        meatbone_collided = False  # Track whether the meatbone has been stomped
        score = 0
        arc1_touched_vertices = []
        arc2_touched_vertices = []
        arc3_touched_vertices = []

        touch_threshold = 0.05
      Begin Routine:
        score = 0  # Reset the score
        arc1_touched_vertices = []
        arc2_touched_vertices = []
        arc3_touched_vertices = []
        meatbone_collided = False
      Each Frame:
        # Check for collision
        if not meatbone_collided and -0.05 <= meatbone_x <= 0.05 and -0.280 <= dino_pos[1] <= -0.200:
            print("Dino ate the meatbone!")
            meatbone_image.opacity = 0  # Make the meatbone disappear
            meatbone_collided = True  # Set collision flag to prevent further updates
            continueRoutine = False


        for vertex in arc1_vertices:
            # Adjust Arc 1 vertex for its X-offset (+1)
            adjusted_vertex_x = vertex[0] + 0.3  # Move Arc 1 vertices by 1 unit to the right
            adjusted_vertex_y = vertex[1] # Y remains unchanged, apply the same adjustment as Arc 2 if needed

            # Calculate distance between Dino and the adjusted vertex of Arc 1
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # Check if Dino is close enough to "touch" the adjusted vertex
            if distance <= touch_threshold and vertex not in arc1_touched_vertices:
                arc1_touched_vertices.append(vertex)
                score += 1  # Increment the score for Arc 1

        for vertex in arc2_vertices:
            # Adjust Arc 2 vertex for its X-offset (+2)
            adjusted_vertex_x = vertex[0] + 1  # Move Arc 2 vertices by 2 units to the right
            adjusted_vertex_y = vertex[1] - 0.1 # Y remains unchanged

            # Calculate distance between Dino and the adjusted vertex of Arc 2
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # Check if Dino is close enough to "touch" the adjusted vertex
            if distance <= touch_threshold and vertex not in arc2_touched_vertices:
                arc2_touched_vertices.append(vertex)
                score += 1  # Increment the score for Arc 2


        for vertex in arc3_vertices:
            # Adjust Arc 3 vertex for its static X-offset
            adjusted_vertex_x = vertex[0] + 1.8  # Offset Arc 3 vertices by 3.5 units to the right
            adjusted_vertex_y = vertex[1]  # Offset Arc 3 vertices by -0.2 units vertically

            # Calculate distance between Dino and the adjusted vertex of Arc 3
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # Check if Dino is close enough to "touch" the adjusted vertex
            if distance <= touch_threshold and vertex not in arc3_touched_vertices:
                arc3_touched_vertices.append(vertex)
                score += 1  # Increment the score for Arc 3

        score_text.text = str(score)
      End Routine:
        global total_touched_vertices, total_possible_vertices
        total_touched_vertices = len(arc1_touched_vertices) + len(arc2_touched_vertices) + len(arc3_touched_vertices)
        total_possible_vertices = len(arc1_vertices) + len(arc2_vertices) + len(arc3_vertices)
    CodeComponent Timer
      Code Type = Py
      Begin Experiment:
        level_timer = core.Clock()  # Initialize the timer
        time_limit = 120  # Set the time limit in seconds (e.g., 2 minutes)
      Begin Routine:
        level_timer.reset()  # Reset the timer at the start of the MainGame routine
      Each Frame:
        # Calculate remaining time
        time_remaining = time_limit - level_timer.getTime()

        # Check if time is up
        if time_remaining <= 0:
            print("Time's up! Returning to MainMenu.")
            continueRoutine = False  # End the MainGame routine
            time_remaining = 0  # Prevent negative time display

        # Format the timer as MM:SS
        minutes = int(time_remaining) // 60
        seconds = int(time_remaining) % 60

        # Update the timer display (assumes a Text Component named 'timer_text')
        timer_text.text = str(f"{minutes}:{seconds:02d}")
  Routine Load
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    TextComponent Loading
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Loading...
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  Routine MainMenu
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    TextComponent TitleText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Main Menu
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    PolygonComponent start_button
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent StartGame
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Start Game
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    PolygonComponent exit_button
      pos = (0, -.2)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent Exit
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text = Exit
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    PolygonComponent controller_selection
      pos = (0, -.1)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent control_feedback
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = Controller
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # Default control method
        selected_control = "Keyboard"
      Begin Routine:
        # Update the feedback text to display the currently selected control method
        control_feedback.text = f"Selected Control: {selected_control}"
      Each Frame:
        # Check if the mouse is clicked and which button is clicked
        if mouse.isPressedIn(start_button):  # Start button
            continueRoutine = False  # End the Main Menu routine

        if mouse.isPressedIn(exit_button):  # Exit button
            core.quit()  # Quit the experiment

        if mouse.isPressedIn(controller_selection):
            # Add a delay to prevent rapid toggling (debounce)
            core.wait(0.2)

            # Toggle between "Keyboard" and "PSURP"
            if selected_control == "Keyboard":
                selected_control = "PSURP"
                ser.flush()
            else:
                selected_control = "Keyboard"

            # Update the feedback text
            control_feedback.text = f"Selected Control: {selected_control}"
    MouseComponent mouse
      forceEndRoutineOnPress = correct click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine resetPSURP
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    TextComponent t_reset_PSURP
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = reseting PSURP
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        #ser.flush()
        #ser.write("X".encode())

        # clear out the data from the IO buffers (Fresh commands)
        # the "X" command puts tje PSURP into command mode
  Routine TARE
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    TextComponent t_tare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = loading each cell with 1 sec delay (5 seconds)
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    CodeComponent tare_code
      Code Type = Py
      End Routine:
        """
        ser.write("TAR0\n".encode())
        time.sleep(1)
        ser.write("TAR1\n".encode())
        time.sleep(1)
        ser.write("TAR2\n".encode())
        time.sleep(1)
        ser.write("TAR3\n".encode())
        time.sleep(1)
        ser.write("TAR4\n".encode())
        time.sleep(1)

        """
        # the tar command zeros out all of the force messurements
        # halt for one second to make sure command was processed
  Routine RUNE
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    TextComponent T_RUNE
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Entering streaming mode ...
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    CodeComponent Code_RUNE
      Code Type = Py
      End Routine:
        #ser.write("RUNE\n".encode())

        # the rune command sets the PSURP to streaming mode. (for getting vals)
  Routine EndGameScreen
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    TextComponent end_score_text
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = Score: 
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    PolygonComponent start_button_2
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent exit_button_2
      pos = (0, -.2)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent StartGame_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Play Again?
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    TextComponent Exit_2
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text = Exit
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        # Default control method
        selected_control = "Keyboard"
      Begin Routine:
        # Calculate the percentage
        if total_possible_vertices > 0:
            percentage = (total_touched_vertices / total_possible_vertices) * 100
        else:
            percentage = 0  # Avoid division by zero

        # Update the text for the end screen
        end_score_text.text = (
            f"You hit {total_touched_vertices} out of {total_possible_vertices} vertices!\n"
            f"That's {percentage:.2f}%!"
        )
      Each Frame:
        # Check if the mouse is clicked and which button is clicked
        if mouse.isPressedIn(start_button_2):  # Start button
            continueRoutine = False  # End the Main Menu routine

        if mouse.isPressedIn(exit_button_2):  # Exit button
            core.quit()  # Quit the experiment
    MouseComponent mouse_2
      forceEndRoutineOnPress = correct click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine resetPSURP
  Routine TARE
  Routine RUNE
  LoopInitiator GameLoop loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine MainMenu
    Routine MainGame
    Routine EndGameScreen
  LoopTerminator GameLoop
