PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [800, 800]
  expName = animation
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    ImageComponent dino_image
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # List of frames for the animation
        frame_paths = ['dino_frames/f1.png', 'dino_frames/f2.png', 'dino_frames/f3.png',
                       'dino_frames/f4.png', 'dino_frames/f5.png', 'dino_frames/f6.png',
                       'dino_frames/f7.png', 'dino_frames/f8.png', 'dino_frames/f9.png',
                       'dino_frames/f10.png', 'dino_frames/f11.png', 'dino_frames/f12.png']

        frame_index = 0  # Start with the first frame
        frame_index_update_counter = 0  # Counter to manage animation speed
        total_frames = len(frame_paths)  # Total number of frames in the animation
      Each Frame:
        # Ensure `frame_index` is updated every X frames (e.g., every 2 frames)
        if (frame_index_update_counter % 4) == 0:  # Adjust 2 to control speed
            # Set the current frame image
            dino_image.image = frame_paths[frame_index]

            # Advance to the next frame
            frame_index += 1
            if frame_index >= total_frames:
                frame_index = 0  # Loop back to the start

        # Increment the counter
        frame_index_update_counter += 1
Flow
  Routine trial
