PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800,800]
  expName = PSURP
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine reset_PSURP
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    TextComponent t_reset_PSURP
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = reseting PSURP
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    CodeComponent code
      Code Type = Py
      End Routine:
        ser.flush()
        ser.write("X".encode())

        # clear out the data from the IO buffers (Fresh commands)
        # the "X" command puts tje PSURP into command mode
  Routine TARE
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    TextComponent t_tare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = loading each cell with 1 sec delay (5 seconds)
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    CodeComponent tare_code
      Code Type = Py
      End Routine:
        ser.write("TAR0\n".encode())
        time.sleep(1)
        ser.write("TAR1\n".encode())
        time.sleep(1)
        ser.write("TAR2\n".encode())
        time.sleep(1)
        ser.write("TAR3\n".encode())
        time.sleep(1)
        ser.write("TAR4\n".encode())
        time.sleep(1)


        # the tar command zeros out all of the force messurements
        # halt for one second to make sure command was processed
  Routine RUNE
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    TextComponent T_RUNE
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Entering streaming mode ...
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    CodeComponent Code_RUNE
      Code Type = Py
      End Routine:
        ser.write("RUNE\n".encode())

        # the rune command sets the PSURP to streaming mode. (for getting vals)
  Routine trail
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading forces...
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    CodeComponent code_trial
      Code Type = Py
      Before Experiment:
        Base71Lookup = "0123456789abcdefghijklmnopqrstuvwxyzABCDEFGHIJKLMNOPQRSTUVWXYZ!$%&'()*+,-./:;<=>?@[\\]^_`{|}~"
      Begin Experiment:
        from psychopy import core
        import time
        import serial

        ser = serial.Serial("COM4",230400, timeout= 1)
      Begin Routine:
        ser.flush()

        strMsg = ""
        intCounter = 0
        strSerialData = ""

        output = ""
        outputlength = 0

        B0HighByte = 0
        B0LowByte = 0
        B0ForceInGrams = 0
        B0ForceInNewtons = 0

        B1HighByte = 0
        B1LowByte = 0
        B1ForceInGrams = 0
        B1ForceInNewtons = 0

        B2HighByte = 0
        B2LowByte = 0
        B2ForceInGrams = 0
        B2ForceInNewtons = 0

        B3HighByte = 0
        B3LowByte = 0
        B3ForceInGrams = 0
        B3ForceInNewtons = 0

        B4HighByte = 0
        B4LowByte = 0
        B4ForceInGrams = 0
        B4ForceInNewtons = 0
      Each Frame:
        if intCounter == 0:
            strMsg = ""
            strMsg += "BUT0 BUT1 BUT2 BUT3 BUT4 TTL\n"
            strMsg += "Base 71: 00 00 00 00 00 00\n"
            strMsg += "G: 0000 0000 0000 0000 0000 g\n"
            strMsg += "N: 0.0000 0.0000 0.0000 0.0000 0.0000 N\n"
            strMsg += "Sample: 0000\n"
            strMsg += "Press 'q' to quit.\n"

            feedback_text.text = strMsg
            win.flip()

        while intCounter < 5000:
            keys = event.getKeys()
            if keys:
                if keys[0] == 'q':  # Quit key (only works during samples)
                    ser.flush()
                    ser.write("X".encode())
                    ser.flush()
                    ser.close()
                    core.quit()

            intCounter = intCounter + 1
            strSerialData = ser.readline()

            strMsg = ""
            strMsg += "BUT0 BUT1 BUT2 BUT3 BUT4 TTL\n"

            output = strSerialData.decode()
            outputlength = len(output)

            if outputlength == 12:
                strMsg += "Base 71: " + output[0]
                strMsg += "" + output[1]
                strMsg += "" + output[2]
                strMsg += "" + output[3]
                strMsg += "" + output[4]
                strMsg += "" + output[5]
                strMsg += "" + output[6]
                strMsg += "" + output[7]
                strMsg += "" + output[8]
                strMsg += "" + output[9]
                strMsg += "" + output[10] + "\n\n"

                for i in range(71):
                    if Base71Lookup[i] == output[0]:
                        B0HighByte = i
                    if Base71Lookup[i] == output[2]:
                        B1HighByte = i
                    if Base71Lookup[i] == output[4]:
                        B2HighByte = i
                    if Base71Lookup[i] == output[6]:
                        B3HighByte = i
                    if Base71Lookup[i] == output[8]:
                        B4HighByte = i

                for i in range(71):
                    if Base71Lookup[i] == output[1]:
                        B0LowByte = i
                    if Base71Lookup[i] == output[3]:
                        B1LowByte = i
                    if Base71Lookup[i] == output[5]:
                        B2LowByte = i
                    if Base71Lookup[i] == output[7]:
                        B3LowByte = i
                    if Base71Lookup[i] == output[9]:
                        B4LowByte = i

                B4ForceInGrams = 0
                B4ForceInNewtons = 0
                B0ForceInGrams = ((B0HighByte * 71) + B0LowByte)
                B0ForceInNewtons = B0ForceInGrams * 0.0098
                B1ForceInGrams = ((B1HighByte * 71) + B1LowByte)
                B1ForceInNewtons = B1ForceInGrams * 0.0098
                B2ForceInGrams = ((B2HighByte * 71) + B2LowByte)
                B2ForceInNewtons = B2ForceInGrams * 0.0098
                B3ForceInGrams = ((B3HighByte * 71) + B3LowByte)
                B3ForceInNewtons = B3ForceInGrams * 0.0098
                B4ForceInGrams = ((B4HighByte * 71) + B4LowByte)
                B4ForceInNewtons = B4ForceInGrams * 0.0098

                TTL = output[10]

                strMsg += "G: {:04d} ".format(B0ForceInGrams)
                strMsg += "{:04d} ".format(B1ForceInGrams)
                strMsg += "{:04d} ".format(B2ForceInGrams)
                strMsg += "{:04d} ".format(B3ForceInGrams)
                strMsg += "{:04d} ".format(B4ForceInGrams)
                strMsg += TTL + "\n\n"

                strMsg += "N: {:0.4f} ".format(B0ForceInNewtons)
                strMsg += "{:0.4f} ".format(B1ForceInNewtons)
                strMsg += "{:0.4f} ".format(B2ForceInNewtons)
                strMsg += "{:0.4f} ".format(B3ForceInNewtons)
                strMsg += "{:0.4f} ".format(B4ForceInNewtons)
                strMsg += TTL + "\n\n"

                strMsg += "Sample: {:04d}\n\n".format(intCounter)
                strMsg += "Press 'q' to quit."

                feedback_text.text = strMsg

                ser.reset_input_buffer()  # This clears the serial buffer so it doesn't overfill. This means you will miss samples!
                win.flip()
      End Experiment:
        ser.flush()
        ser.write("X".encode())
        ser.flush()
        ser.close()
Flow
  Routine reset_PSURP
  Routine TARE
  Routine RUNE
  Routine trail
