PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800, 800]
  expName = pressurebox
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = waiting for data
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    CodeComponent code1
      Code Type = Py
      Begin Experiment:
        import serial
        import time


        try:
            ser = serial.Serial('COM4', baudrate=230400, timeout=1)
            print("Serial connection established.")
        except Exception as e:
            print(f"Error: Could not establish serial connection. {e}")
            ser = None

        forces = [0, 0, 0, 0, 0]
        previous_forces = [0, 0, 0, 0, 0]
        threshold = 10
      Each Frame:
        if ser:
            try:

                raw_data = ser.readline().decode("utf-8").strip()
                print(f"Raw data: {raw_data}")


                clean_data = ''.join(c for c in raw_data if c in "0123456789ABCDEFabcdef")


                if len(clean_data) >= 10:

                    forces = [int(clean_data[i:i + 2], 16) for i in range(0, 10, 2)]


                    threshold = 50
                    filtered_forces = [force if force >= threshold else 0 for force in forces]


                    text1.text = (
                        f"Button Forces:\n"
                        f"Button 1: {filtered_forces[0]} g\n"
                        f"Button 2: {filtered_forces[1]} g\n"
                        f"Button 3: {filtered_forces[2]} g\n"
                        f"Button 4: {filtered_forces[3]} g\n"
                        f"Button 5: {filtered_forces[4]} g\n"
                    )
                else:

                    print(f"Skipped frame due to insufficient valid data: {clean_data}")
            except Exception as e:

                print(f"Error reading data: {e}")
        else:
            text1.text = "No serial connection detected."
      End Experiment:
        if ser:
            ser.close()
            print("Serial connection closed.")
Flow
  Routine trial
